PsychoPy2experiment version="2026.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = pix
  Window size (pixels) = [1200, 750]
  backgroundFit = fill
  color = $[0,0,0]
  colorSpace = lms
  expName = Flanker's Experiment Solo Project
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine Intstructions
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    TextComponent text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Welcome, and thank you for taking part.



        In this task, a shape will appear in the centre of the screen.
        Sometimes other shapes will appear on either side of it.

        Your job is to respond ONLY to the centre shape and ignore the others.


        If the centre shape is  ▲  or  ●   press the  A  key.

        If the centre shape is  ■  or  ◆   press the  L  key.


        Keep your eyes on the + in the middle of the screen.

        Respond as quickly and as accurately as you can.




        Press SPACE to begin.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine Fixation
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    PolygonComponent polygon
      fillColor = white
      shape = cross
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine Trial
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    TextComponent Target
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 1.5
      text [set every repeat] = $targetChar
      units = height
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    TextComponent Flank1L
      color = -1.0000, -1.0000, -1.0000
      draggable = True
      letterHeight = 0.05
      pos [set every repeat] = $(flank1LX, 0)
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 1.5
      text [set every repeat] = $flank1LChar
      units = height
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    TextComponent flank2L
      color = -1.0000, -1.0000, -1.0000
      draggable = True
      letterHeight = 0.05
      pos [set every repeat] = $(flank2LX, 0)
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 1.5
      text [set every repeat] = $flank2LChar
      units = height
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    TextComponent flank3L
      color = -1.0000, -1.0000, -1.0000
      draggable = True
      letterHeight = 0.05
      pos [set every repeat] = $(flank3LX, 0)
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 1.5
      text [set every repeat] = $flank3LChar
      units = height
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    TextComponent flank1R
      color = -1.0000, -1.0000, -1.0000
      draggable = True
      letterHeight = 0.05
      pos [set every repeat] = $(flank1RX, 0)
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 1.5
      text [set every repeat] = $flank1RChar
      units = height
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    TextComponent flank2R
      color = -1.0000, -1.0000, -1.0000
      draggable = True
      letterHeight = 0.05
      pos [set every repeat] = $(flank2RX, 0)
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 1.5
      text [set every repeat] = $flank2RChar
      units = height
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    TextComponent flank3R
      color = -1.0000, -1.0000, -1.0000
      draggable = True
      letterHeight = 0.05
      pos [set every repeat] = $(flank3RX, 0)
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 1.5
      text [set every repeat] = $flank3RChar
      units = height
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    KeyboardComponent key_resp_2
      allowedKeys = 'a','l'
      correctAns = $correctAns
      forceEndRoutine = True
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 1.5
      storeCorrect = True
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  Routine iti
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $itiDur
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  Routine practice_end
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    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Practice complete. The main task works the same way, but there is no feedback after each trial. Press SPACE to begin.
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    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine Intstructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = Untitled spreadsheet.xlsx
    loopType = random
    nReps = 5
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    conditions:
      [{'compatibility': 'congruent', 'spacing': 'close', 'targetChar': '■', 'correctAns': 'l', 'flank1LChar': '◆', 'flank2LChar': '◆', 'flank3LChar': '◆', 'flank1RChar': '◆', 'flank2RChar': '◆', 'flank3RChar': '◆', 'flank1LX': -0.08, 'flank2LX': -0.16, 'flank3LX': -0.24, 'flank1RX': 0.08, 'flank2RX': 0.16, 'flank3RX': 0.24, 'itiDur': 0.889},
      {'compatibility': 'congruent', 'spacing': 'far', 'targetChar': '▲', 'correctAns': 'a', 'flank1LChar': '●', 'flank2LChar': '●', 'flank3LChar': '●', 'flank1RChar': '●', 'flank2RChar': '●', 'flank3RChar': '●', 'flank1LX': -1.0, 'flank2LX': -0.3, 'flank3LX': -4.35, 'flank1RX': 0.15, 'flank2RX': 0.3, 'flank3RX': 4.35, 'itiDur': 0.837},
      {'compatibility': 'congruent', 'spacing': 'close', 'targetChar': '■', 'correctAns': 'l', 'flank1LChar': '◆', 'flank2LChar': '◆', 'flank3LChar': '◆', 'flank1RChar': '◆', 'flank2RChar': '◆', 'flank3RChar': '◆', 'flank1LX': -0.08, 'flank2LX': -0.16, 'flank3LX': -0.24, 'flank1RX': 0.08, 'flank2RX': 0.16, 'flank3RX': 0.24, 'itiDur': 0.98},
      {'compatibility': 'congruent', 'spacing': 'close', 'targetChar': '◆', 'correctAns': 'l', 'flank1LChar': '■', 'flank2LChar': '■', 'flank3LChar': '■', 'flank1RChar': '■', 'flank2RChar': '■', 'flank3RChar': '■', 'flank1LX': -0.08, 'flank2LX': -0.16, 'flank3LX': -0.24, 'flank1RX': 0.08, 'flank2RX': 0.16, 'flank3RX': 0.24, 'itiDur': 0.911}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
    Routine Fixation
    Routine Trial
  LoopTerminator trials
  Routine iti
  Routine practice_end
